PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  expName = maskingDemo
  keyboardBackend = ioHub
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Routines
  Routine targetInstruction
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    TextComponent instructions1
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      text = Fixate on the plus symbol at the center of the screen during the experiment. A target stimulus will appear briefly on the left or right side of the screen (here it is on the left).
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    TextComponent instructions2
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      text = Press the left arrow key if the target is on the left, or the right arrow key if the target is on the right. Press the left arrow key now to continue.
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    KeyboardComponent instructionKeyResponse1
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    PolygonComponent fixationDemo
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    GratingComponent targetDemo
      contrast [set every repeat] = 0.4
      mask = circle
      pos = (-0.5, 0)
      sf = 2
      size = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      tex = sqr
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  Routine maskInstruction
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    TextComponent instructions3
      color = black
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = On most trials the target will be followed by a mask stimulus on both sides of the screen, which might make it difficult to see which side the target was on.
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    TextComponent instructions4
      color = black
      letterHeight = 0.05
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
      text = Even if you are not sure which side the target was on, respond with your best guess as soon as possible (within 2 seconds). Press the left or right arrow key now to start the task. Press the escape key at any time to quit.
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    KeyboardComponent instructionKeyResponse2
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    PolygonComponent fixationDemo2
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60
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    GratingComponent maskLeftVertDemo
      contrast = 0.4
      mask = circle
      opacity = 0.5
      pos = (-0.5, 0)
      sf = 2
      size = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      tex = sqr
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    GratingComponent maskLeftHorzDemo
      contrast = 0.4
      mask = circle
      opacity = 0.5
      ori = 90
      pos = (-0.5, 0)
      sf = 2
      size = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      tex = sqr
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    GratingComponent maskRightVertDemo
      contrast = 0.4
      mask = circle
      opacity = 0.5
      pos = (0.5, 0)
      sf = 2
      size = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      tex = sqr
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    GratingComponent maskRightHorzDemo
      contrast = 0.4
      mask = circle
      opacity = 0.5
      ori = 90
      pos = (0.5, 0)
      sf = 2
      size = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 60
      tex = sqr
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  Routine trial
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Experiment:
        iti = 0
        minIti = 180
        maxIti = 300
        respWinDur = 120
        feedback = ''
      Begin Routine:
        iti = minIti + (maxIti - minIti) * random()
      End Routine:
        if not keyResponse.keys:
            feedback = 'no response'
        elif targetContrast == 0:
            if random() > 0.5:
                feedback = 'correct'
            else:
                feedback = 'incorrect'
        elif ((targetPosition < 0 and 'left' in keyResponse.keys) or
              (targetPosition > 0 and 'right' in keyResponse.keys)):
            feedback = 'correct'
        else:
            feedback = 'incorrect'
    TextComponent feedbackText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback
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    KeyboardComponent keyResponse
      allowedKeys = 'left','right'
      durationEstim = 2
      forceEndRoutine = True
      startEstim = 3
      startVal [frame N] = $iti
      stopVal [duration (frames)] = $respWinDur
      store = first key
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    PolygonComponent fixation
      durationEstim = 4
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.01, 0.01)
      startVal [time (s)] = 1.0
      stopVal [duration (frames)] = $iti + 60
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    GratingComponent target
      contrast [set every repeat] = targetContrast
      durationEstim = 0.0167
      mask = circle
      pos [set every repeat] = (targetPosition, 0)
      sf = 2
      size = 0.04
      startEstim = 3
      startVal [frame N] = $iti
      stopVal [duration (frames)] = 1
      tex = sqr
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    GratingComponent maskLeftVert
      contrast [set every repeat] = maskContrast
      durationEstim = 1.9
      mask = circle
      opacity = 0.5
      pos = (-0.5, 0)
      sf = 2
      size = 0.04
      startEstim = 3.1
      startVal [frame N] = $iti + maskOnset
      stopVal [duration (frames)] = $respWinDur - maskOnset
      tex = sqr
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    GratingComponent maskLeftHorz
      contrast [set every repeat] = maskContrast
      durationEstim = 1.9
      mask = circle
      opacity = 0.5
      ori = 90
      pos = (-0.5, 0)
      sf = 2
      size = 0.04
      startEstim = 3.1
      startVal [frame N] = $iti + maskOnset
      stopVal [duration (frames)] = $respWinDur - maskOnset
      tex = sqr
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    GratingComponent maskRightVert
      contrast [set every repeat] = maskContrast
      durationEstim = 1.9
      mask = circle
      opacity = 0.5
      pos = (0.5, 0)
      sf = 2
      size = 0.04
      startEstim = 3.1
      startVal [frame N] = $iti + maskOnset
      stopVal [duration (frames)] = $respWinDur - maskOnset
      tex = sqr
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    GratingComponent maskRightHorz
      contrast [set every repeat] = maskContrast
      durationEstim = 1.9
      mask = circle
      opacity = 0.5
      ori = 90
      pos = (0.5, 0)
      sf = 2
      size = 0.04
      startEstim = 3.1
      startVal [frame N] = $iti + maskOnset
      stopVal [duration (frames)] = $respWinDur - maskOnset
      tex = sqr
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Flow
  Routine targetInstruction
  Routine maskInstruction
  LoopInitiator warmupTrials loopType="TrialHandler"
    Selected rows = 0,1,1,0,16,9,8,13,6,11,4,1
    conditionsFile = maskingDemoConditions.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0, 'maskOnset': 0},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0, 'maskOnset': 0},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0, 'maskOnset': 0},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0, 'maskOnset': 0},
      {'targetContrast': 0, 'targetPosition': 0, 'maskContrast': 0.4, 'maskOnset': 0},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 1},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 2},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 3},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 4},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 5},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 6},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 1},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 2},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 3},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 4},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 5},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 6}]
    Routine trial
  LoopTerminator warmupTrials
  LoopInitiator randomTrials loopType="TrialHandler"
    conditionsFile = maskingDemoConditions.xlsx
    loopType = random
    nReps = 15
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    conditions:
      [{'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0, 'maskOnset': 0},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0, 'maskOnset': 0},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0, 'maskOnset': 0},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0, 'maskOnset': 0},
      {'targetContrast': 0, 'targetPosition': 0, 'maskContrast': 0.4, 'maskOnset': 0},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 1},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 2},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 3},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 4},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 5},
      {'targetContrast': 0.4, 'targetPosition': -0.5, 'maskContrast': 0.4, 'maskOnset': 6},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 1},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 2},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 3},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 4},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 5},
      {'targetContrast': 0.4, 'targetPosition': 0.5, 'maskContrast': 0.4, 'maskOnset': 6}]
    Routine trial
  LoopTerminator randomTrials
